<?xml version="1.0" encoding="UTF-8" standalone="no"?>
<batch mzmine_version="4.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            {input_files}
        </parameter>
        <parameter name="Vendor data options">
            <parameter name="Try vendor centroiding">true</parameter>
            <parameter name="Remove calibrant signals (Thermo)">true</parameter>
            <parameter name="Apply lockmass on import (Waters)" selected="true">
                <parameter name="Positive lockmass">556.276575</parameter>
                <parameter name="Negative lockmass">554.262022</parameter>
            </parameter>
            <parameter name="Waters MassLynx data import">native</parameter>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="true">
            <current_file>{metadata_file}</current_file>
        </parameter>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files">
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20250828_targetmol_hts_np_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_mcebio_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_otavapep_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_enamdisc_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_nihnp_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_mcescaf_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_mcedrug_pos_ms2.json</file>
            <file>/home/arne-lammers/.mzmine/external_resources/spectral_libraries/msnlib/20241003_enammol_pos_ms2.json</file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES">
            <by_metadata column="" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">5.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES">
            <by_metadata column="" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">2.5</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES">
            <by_metadata column="" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>{rt_range_min}</min>
                <max>{rt_range_max}</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">ANY</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">10000.0</parameter>
        <parameter name="Minimum absolute height">{minimum_feature_height}</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>7.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" module_name="Smoothing" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time width (scans)" selected="true">5</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">{approximate_feature_fwhm}</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.10000000149011612</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>3.0000000447034836</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" module_name="13C isotope filter (formerly: isotope grouper)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.04</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" module_name="Isotopic peaks finder" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" module_name="Join aligner" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Minimum aligned samples" selected="true">
            <abs>1</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" module_name="Feature finder (multithreaded)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>7.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" module_name="Duplicate peak filter" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>7.5E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.07</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" module_name="Correlation grouping (metaCorrelate)" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.055999998</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">5.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">false</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" module_name="Ion identity networking" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ONE FEATURE</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" module_name="Export to CSV file (modular)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{output_feature_table_before_subtraction}</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_blanksubtraction.FeatureListBlankSubtractionModule" module_name="Feature list blank subtraction" parameter_version="2">
        <parameter name="Aligned feature list" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Blank/Control raw data files" type="BY_METADATA">
            <by_metadata column="type" group0="procedural_blank" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Minimum # of detection in blanks">{blank_subtraction_min_blank_presence}</parameter>
        <parameter name="Abundance measure">Height</parameter>
        <parameter name="Blank abundance ratio type">MAXIMUM</parameter>
        <parameter name="Fold change increase" selected="true">{blank_subtraction_fold_change_threshold}</parameter>
        <parameter name="Check abundance of">maximum_feature</parameter>
        <parameter name="Create secondary list of subtracted features">false</parameter>
        <parameter name="Suffix">subtracted</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" module_name="Spectral library search" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.002</absolutetolerance>
                    <ppmtolerance>7.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">2</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">4</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">SQRT (mz^0 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_lipidid.annotation_modules.LipidAnnotationModule" module_name="Lipid Annotation" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Lipid classes">
            <item>Fatty Acyls</item>
            <item>Fatty acids and Conjugates</item>
            <item>FA Free fatty acids</item>
            <item>FA Oxidized fatty acids</item>
            <item>Fatty esters</item>
            <item>FAHFA Fatty acid estolides</item>
            <item>CAR Fatty acyl carnitines</item>
            <item>Fatty amides</item>
            <item>NA N-Acyl glycine</item>
            <item>Glycerolipids</item>
            <item>Monoradylglycerols</item>
            <item>MG Monoacylglycerols</item>
            <item>MG Monoalkylglycerols</item>
            <item>Diradylglycerols</item>
            <item>DG Diacylglycerols</item>
            <item>DG Alkylacylglycerols</item>
            <item>DG Dialkylglycerols</item>
            <item>Triradylglycerols</item>
            <item>TG Triacylglycerols</item>
            <item>TG Alkyldiacylglycerols</item>
            <item>Other glycerolipids</item>
            <item>DGTS Diacylglyceroltrimethylhomoserin</item>
            <item>LDGTS Monoacylglyceroltrimethylhomoserin</item>
            <item>Glycosyldiacylglycerols</item>
            <item>MGDG Monogalactosyldiacylglycerol</item>
            <item>MGMG Monogalactosylmonoacylglycerol</item>
            <item>DGDG Digalactosyldiacylglycerol</item>
            <item>SQDG Sulfoquinovosyldiacylglycerols</item>
            <item>Glycosylmonoacylglycerols</item>
            <item>SQMG Sulfoquinovosylmonoacylglycerols</item>
            <item>Glycerophospholipids</item>
            <item>Phosphatidylcholine</item>
            <item>PC Diacylglycerophosphocholines</item>
            <item>PC Alkylacylglycerophosphocholines</item>
            <item>PC Dialkylglycerophosphocholines</item>
            <item>LPC Monoacylglycerophosphocholines</item>
            <item>LPC Monoalkylglycerophosphocholines</item>
            <item>Glycerophosphoethanolamines</item>
            <item>PE Diacylglycerophosphoethanolamines</item>
            <item>PE Alkylacylglycerophosphoethanolamines</item>
            <item>PE Dialkylglycerophosphoethanolamines</item>
            <item>LPE Monoacylglycerophosphoethanolamines</item>
            <item>LPE Monoalkylglycerophosphoethanolamines</item>
            <item>LNAPE N-acyl-lysophosphatidylethanolamine</item>
            <item>Glycerophosphoserines</item>
            <item>PS Diacylglycerophosphoserines</item>
            <item>PS Alkylacylglycerophosphoserines</item>
            <item>LPS Monoacylglycerophosphoserines</item>
            <item>LPS Monoalkylglycerophosphoserines</item>
            <item>Glycerophosphoglycerols</item>
            <item>PG Diacylglycerophosphoglycerols</item>
            <item>PG Alkylacylglycerophosphoglycerols</item>
            <item>PG Dialkylglycerophosphoglycerols</item>
            <item>LPG Monoacylglycerophosphoglycerols</item>
            <item>LPG Monoalkylglycerophosphoglycerols</item>
            <item>BMP Monoacylglycerophosphomonoradylglycerols</item>
            <item>Glycerophosphoinositols</item>
            <item>PI Diacylglycerophosphoinositols</item>
            <item>PI Alkylacylglycerophosphoinositols</item>
            <item>PI Dialkylglycerophosphoinositols</item>
            <item>LPI Monoacylglycerophosphoinositols</item>
            <item>LPI Monoalkylglycerophosphoinositols</item>
            <item>Glycerophosphates</item>
            <item>PA Diacylglycerophosphates</item>
            <item>PA Alkylacylglycerophosphates</item>
            <item>LPA Monoacylglycerophosphates</item>
            <item>LPA Monoalkylglycerophosphates</item>
            <item>Cardiolipin</item>
            <item>CL Diacylglycerophosphoglycerophosphodiradylglycerols</item>
            <item>MLCL Diacylglycerophosphoglycerophosphomonoradylglycerols</item>
            <item>DLCL Monoacylglycerophosphoglycerophosphomonoradylglycerols</item>
            <item>Sphingolipids</item>
            <item>Sphingoid bases</item>
            <item>SPB Sphingosines and Sphinganines</item>
            <item>SPB Phytosphingosines and Phytosphinganines</item>
            <item>Ceramides</item>
            <item>Cer Ceramides and dihydroceramides hydroxy fatty acid</item>
            <item>CerP Ceramide-1-phosphates</item>
            <item>Cer N-acyl-4-hydroxysphinganines (phytoceramides)</item>
            <item>Cer N-acylsphingosines (ceramides) and N-acylsphinganines (dihydroceramides)</item>
            <item>Cer Phytoceramides hydroxy fatty acid</item>
            <item>Neutral glycosphingolipids</item>
            <item>Hex2Cer Dihexosylceramides</item>
            <item>Hex3Cer Trihexosylceramides</item>
            <item>HexCer Hexosylceramides</item>
            <item>HexCer Hexosylceramide hydroxy fatty acid</item>
            <item>HexCer Hexosylceramide hydroxy fatty acid phytosphingosine</item>
            <item>Phosphosphingolipids</item>
            <item>SM Ceramide Phosphocholines (Sphingomyelins)</item>
            <item>SM Oxidized Ceramide Phosphocholines (Sphingomyelins)</item>
            <item>Sterol Lipids</item>
            <item>Sterols</item>
            <item>CE Cholesterol esters</item>
        </parameter>
        <parameter name="Side chain parameters">
            <parameter name="Minimum chain length">12</parameter>
            <parameter name="Maximum chain length">26</parameter>
            <parameter name="Minimum number of DBEs">0</parameter>
            <parameter name="Maximum number of DBEs">6</parameter>
            <parameter name="Only search for even chain length">false</parameter>
        </parameter>
        <parameter name="m/z tolerance MS1 level:">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Search for lipid class specific fragments in MS/MS spectra" selected="true">
            <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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                <module name="input_scans">
                    <parameter name="Select input scans">all_scans</parameter>
                </module>
            </parameter>
            <parameter name="m/z tolerance MS2 level:">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>7.0</ppmtolerance>
            </parameter>
            <parameter name="Explained intensity [%]:">0.6</parameter>
            <parameter name="Keep unconfirmed annotations">false</parameter>
        </parameter>
        <parameter name="Search for custom lipid class" selected="false">
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_formulapredictionfeaturelist.FormulaPredictionFeatureListModule" module_name="Formula prediction" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Fallback adduct">[M+H]+</parameter>
        <parameter name="Sorting" selected="true">
            <parameter name="Max ppm distance (weight)">10.0</parameter>
            <parameter name="Weight isotope pattern score">1.0</parameter>
            <parameter name="Weight MS/MS score">1.0</parameter>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Max best formulas per feature">10</parameter>
        <parameter name="Elements">N[0-10]H[0-300]O[0-10]C[0-100]P[0-2]S[0-2]</parameter>
        <parameter name="Element count heuristics" selected="true">
            <parameter name="H/C ratio">true</parameter>
            <parameter name="NOPS/C ratios">true</parameter>
            <parameter name="Multiple element counts">true</parameter>
        </parameter>
        <parameter name="RDBE restrictions" selected="true">
            <parameter name="RDBE range">
                <min>-1.0</min>
                <max>40.0</max>
            </parameter>
            <parameter name="RDBE must be an integer">true</parameter>
        </parameter>
        <parameter name="Isotope pattern filter" selected="true">
            <parameter name="Isotope m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>3.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum absolute intensity">0.01</parameter>
            <parameter name="Minimum score">0.5</parameter>
        </parameter>
        <parameter name="MS/MS filter" selected="true">
            <parameter name="MS/MS m/z tolerance">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>7.0</ppmtolerance>
            </parameter>
            <parameter name="MS/MS score threshold">0.5</parameter>
            <parameter name="Use only top N signals" selected="true">20</parameter>
        </parameter>
        <parameter name="Exclude features above m/z">600.0</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" module_name="Export to CSV file (modular)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{output_feature_table}</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" module_name="Export for SIRIUS" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{output_export_sirius}</current_file>
        </parameter>
        <parameter name="Intensity normalization" scientific="true">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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            <module name="input_scans">
                <parameter name="Select input scans">all_scans</parameter>
            </module>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{output_annotations}</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
</batch>
