<?xml version="1.0" encoding="UTF-8" standalone="no"?>
<batch mzmine_version="4.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            {input_files}
        </parameter>
        <parameter name="Vendor data options">
            <parameter name="Try vendor centroiding">true</parameter>
            <parameter name="Remove calibrant signals (Thermo)">true</parameter>
            <parameter name="Apply lockmass on import (Waters)" selected="true">
                <parameter name="Positive lockmass">556.276575</parameter>
                <parameter name="Negative lockmass">554.262022</parameter>
            </parameter>
            <parameter name="Waters MassLynx data import">native</parameter>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="true">
            <current_file>{metadata_file}</current_file>
        </parameter>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES">
            <by_metadata column="" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">5.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES">
            <by_metadata column="" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">2.5</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES">
            <by_metadata column="" includeExcludeType="include"/>
            <by_metadata column="" includeExcludeType="exclude"/>
        </parameter>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.5</min>
                <max>60.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">10000.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" module_name="Smoothing" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time width (scans)" selected="true">5</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.1</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.10000000149011612</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>3.0000000447034836</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" module_name="13C isotope filter (formerly: isotope grouper)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" module_name="Isotopic peaks finder" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" module_name="Join aligner" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Minimum aligned samples" selected="true">
            <abs>1</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" module_name="Feature finder (multithreaded)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" module_name="Duplicate peak filter" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>2.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.07</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" module_name="Export to CSV file (modular)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{output_csv}</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" module_name="Export for SIRIUS" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{output_mgf}</current_file>
        </parameter>
        <parameter name="Intensity normalization" scientific="true">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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            <module name="input_scans">
                <parameter name="Select input scans">most_intense_across_samples</parameter>
            </module>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
